{load_file("stdrun.hoc")}

/////////////////////// Pyramidal Cells //////////////////////////////
// 4-compartment Corticospinal Cell Model Created by ZC (2023)
// Adapted from 6-compartment Simplified Corticospinal Cell Model used in the following article:
//  Neymotin SA, Suter BA, Dura-Bernal S, Shepherd GMGS, Migliore M, Lytton WW.
//  Optimizing computer models of corticospinal neurons to replicate in vitro dynamics.
//  Journal of Neurophysiology Published 19 October 2016 DOI: 10.1152/jn.00570.2016
//  http://jn.physiology.org/content/early/2016/10/14/jn.00570.2016.abstract

begintemplate CP_Cell
	public soma, axon, dend, apic, type, insert_mechs
	create soma[1], axon[1], dend[1], apic[1]
	strdef type

	public noise, noiseRandObj
	objref noise, noiseRandObj
	public all, somatic, axonal, basal, apical
	objref all, somatic, axonal, basal, apical

	proc init() {
		type = "CP_Cell"	

		/////// parameters ///////
		Vrest = -88.5366550238 // resting potential
		Vinit = -75.0413649414 // initial potential
		// celsius = 34.0 // for in vitro opt

		// geometry properties
		somaL = 48.4123467666
		somaDiam = 28.2149102762
		axonL = 594.292937602
		axonDiam =  1.40966286462
		apicL = 785.713908009 // =261.904636003*3 simplify 3 compartments into single
		apicDiam = 1.5831889597
		bdendL = 299.810775175
		bdendDiam = 2.2799248874

		// passive properties
		rall = 114.510490019 // Ra all
		axonCap =  1.01280903702 // capacitance
		somaCap =  1.78829677463
		apicCap = 1.03418636866
		bdendCap = 1.89771901209
		axonRM = 3945.2107187 // Rm
		somaRM = 18501.7540916
		apicRM = 10751.193413
		dendRM = 13123.00174

		// Na, K reversal potentials calculated from BenS internal/external solutions via Nernst eq.
		p_ek = -104.0 // these reversal potentials for in vitro conditions
		p_ena = 42.0
		
		// d-current
		kdmc_gbar = 0.000404311891107
		kdmc_gbar_axonm = 20
		// spiking currents
		nax_gbar = 0.0345117294903
		nax_gbar_axonm = 5.0
		kdr_gbar = 0.0131103978049
		kdr_gbar_axonm = 5.0
		// A few kinetic params changed vis-a-vis kdr.mod defaults:
		kdr_vhalfn = 11.6427471384
		kap_gbar = 0.0898600246397
		kap_gbar_axonm = 5.0
		// A few kinetic params changed vis-a-vis kap.mod defaults:
		kap_vhalfn  = 32.7885075379
		kap_vhalfl = -59.7867409796 // global!!
		kap_tq = -52.0967985869

		// h-current
		h_erev = -37.0 // global
		h_gbar = 0.000140956438043
		h_gbar_tuft = 0.00565 // mho/cm^2 (based on Harnett 2015 J Neurosci)
		nexusdist = 300.0
		h_gbar_tuftm = h_gbar_tuft / h_gbar
		h_lambda = nexusdist / log(h_gbar_tuftm)
		calginc = 1.0 // middle apical dend gets more iL
		midapic_d1 = 261.9 // start of middle apical dend (1/3 of length)
		midapic_d2 = 523.8 // end of middle apical dend (2/3 of length)

		// other ion channel parameters
		cal_gcalbar = 4.41583533572e-06
		can_gcanbar = 4.60717910591e-06
		kBK_gpeak = 5.09733585163e-05
		kBK_caVhminShift = 43.8900261407
		kBK_caVhmin = -46.08 + kBK_caVhminShift
		// kBK_caVhmax = 155.67
		cadad_depth = 0.119408607923
		cadad_taur = 99.1146852282

		/////// sections ///////
		all = new SectionList()
		somatic = new SectionList()
		axonal = new SectionList()
		basal = new SectionList()
		apical = new SectionList()

		soma[0] all.append()
		soma[0] somatic.append()
		axon[0] all.append()
		axon[0] axonal.append()
		dend[0] all.append()
		dend[0] basal.append()
		apic[0] all.append()
		apic[0] apical.append()

		/////// topology ///////
		connect axon[0](0), soma[0](0.5)
		connect dend[0](0), soma[0](0)
		connect apic[0](0), soma[0](1)

		/////// geometry ///////
		// dendrites along z axis
		axon_L_scale = 1.0 // shorten axon to not infuence LFP much while keeping the same membrane area
		soma[0] {
			nseg = 1
			diam = somaDiam
			pt3dadd(0,0,-somaL/2,diam)
			pt3dadd(0,0,somaL/2,diam)
		}
		axon[0] {
			nseg = 1 // 3.
			diam = axonDiam/axon_L_scale
			pt3dadd(0,0,0,diam)
			pt3dadd(0,0,-axonL*axon_L_scale,diam)
		}
		dend[0] {
			nseg = 1
			diam = bdendDiam
			pt3dadd(0,0,-somaL/2,diam)
			pt3dadd(0,0,-somaL/2-bdendL,diam)
		}
		apic[0] {
			nseg = 3 // 10. basal length constant around 1.33 times of the apical. keep roughly the same electrotonic distance per segment
			diam = apicDiam
			pt3dadd(0,0,somaL/2,diam)
			pt3dadd(0,0,somaL/2+apicL,diam)
		}

		/////// biophysics ///////
		// insert mechanisms
		forall {
			insert k_ion
			insert na_ion
			insert pas
			insert nax // Na current
			insert kdr // K delayed rectifier current
			insert kap // K-A current
			
			// for all sections except axon
			if (!issection(".*axon.*")) {
				insert ih // h-current
				insert ca_ion // calcium channels
				insert cal // cal_mig.mod
				insert can // can_mig.mod
				insert cadad // cadad.mod - calcium decay
				insert kBK // kBK.mod - ca and v dependent k channel
			}
		}
		soma[0] insert kdmc // K-D current in soma & axon only
		axon[0] insert kdmc

		// common properties
		forall {
			Ra = rall
			ek = p_ek // K+ current reversal potential (mV)
			ena = p_ena // Na+ current reversal potential (mV)
			e_pas = Vrest // passive reversal (mV)

			vhalfn_kdr = kdr_vhalfn // KDR kinetics
			vhalfn_kap = kap_vhalfn // K-A kinetics
			vhalfl_kap = kap_vhalfl
			tq_kap = kap_tq

			// for all sections except axon
			if (!issection(".*axon.*")) {
				gbar_nax = nax_gbar // Na
				gbar_kdr = kdr_gbar // KDR
				gbar_kap = kap_gbar // K-A

				gcalbar_cal = cal_gcalbar
				gcanbar_can = can_gcanbar
				gpeak_kBK = kBK_gpeak
				caVhmin_kBK = kBK_caVhmin
				depth_cadad = cadad_depth
				taur_cadad = cadad_taur

				erev_ih = h_erev // Ih
				gbar_ih = h_gbar
			}

			v = Vinit // initial potential
		}

		// compartment specific properties
		soma[0] {
			cm = somaCap
			g_pas = 1.0/somaRM
			gbar_kdmc  = kdmc_gbar
			distance(0, 0.5) // set soma center as origin for Ih gbar calculation
		}
		axon[0] {
			cm = axonCap
			g_pas = 1.0/axonRM
            Ra = rall/axon_L_scale
			gbar_kdmc  = kdmc_gbar * kdmc_gbar_axonm
			gbar_nax = nax_gbar * nax_gbar_axonm
			gbar_kdr = kdr_gbar * kdr_gbar_axonm
			gbar_kap = kap_gbar * kap_gbar_axonm
		}
		dend[0] {
			cm = bdendCap
			g_pas = 1.0/dendRM
		}
		apic[0] {
			cm = apicCap
			g_pas = 1.0/apicRM
			for (x,0) {
				d = distance(x)
				if (d <= nexusdist) {
					gbar_ih = h_gbar * exp(d/h_lambda)
				} else {
					gbar_ih = h_gbar
				}
				if (d>midapic_d1 && d<midapic_d2) {
					gcalbar_cal = cal_gcalbar * calginc
					// print d // check location of middle apical dend
				}
			}
		}

		define_shape() // builtin fcn: fill in 3d info for sections defined by only L and diam, translate 3d points for consistency with their connections
	} //end init

	proc insert_mechs() {
		randseed = $1
		soma[0]{
			noiseRandObj=new Random()
			noiseRandObj.Random123(randseed)
			noiseRandObj.normal(0,1)

			noise = new Gfluct2(0.5)
			noise.g_e0 = 0.002
			noise.g_i0 = 0.021
			noise.std_e = 0.001
			noise.std_i = 0.008
			// noise.tau_e = 10.0
			// noise.tau_i = 30.0

			noise.setRandObj(noiseRandObj)
		}
	}
endtemplate CP_Cell
